PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '', 'gender': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = face_recognition_ERP_protocol
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent trialImage
      flipHoriz = True
      flipVert = True
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent polygon
      anchor = bottom-left
      fillColor = white
      pos = (-0.9, -0.5)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WelcomeScreen
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Welcome!
  Routine InstructionsScreen
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pay attention to the images with minimal head movements if possible.

        Mentally count each instance of an image of Daniel Radcliffe (Harry Potter)

        Press SPACEBAR when you are ready to start the Experiment.
    KeyboardComponent spacebar_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blankScreen
    TextComponent blank_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trialBlockScreen
    TextComponent trialBlockText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = When you are ready to start a new trial block, press the SPACEBAR!
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    KeyboardComponent new_trialblock
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for participating!
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  Routine eyeScreen
    TextComponent eye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Blink you eyes
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  Routine jawClenching
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Clench your jaw!
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  Routine closedEyes
    TextComponent closedEyes_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Close your eyes and open them when you hear the beep.
    SoundComponent beep
      sound = A
      startVal [time (s)] = 14.4
      stopVal [duration (s)] = 0.5
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  Routine codingTrials
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import pandas as pd
        import random

        file_path = 'C:/Users/migue/OneDrive/Ambiente de Trabalho/IEEE project/EEG-Situ_VS_EEG-fMRI/stims.xlsx'
      Begin Experiment:
        imgs_file = pd.read_excel(file_path)

        permutation = np.random.permutation(imgs_file.index)
        shuffled_df = imgs_file.loc[permutation]

        img = shuffled_df['image'].values
  Routine conditionScreen
    TextComponent conditionTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR when you are ready to initiate the next condition trial!
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    KeyboardComponent new_conditionblock
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine InstructionsScreen
  Routine eyeScreen
  Routine jawClenching
  Routine closedEyes
  Routine codingTrials
  LoopInitiator trial_block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 12
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stims.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'image': 'Celebs/14_Emma_Watson_0004.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/14_Emma_Watson_0005.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/14_Emma_Watson_0008.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/14_Emma_Watson_0013.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/14_Emma_Watson_0015.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/15_Margot_Robbie_0005.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/15_Margot_Robbie_0012.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/16_Emma_Stone_0008.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/16_Emma_Stone_0010.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/16_Emma_Stone_0012.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/16_Emma_Stone_0014.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/16_Margot_Robbie_0009.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/17_Daniel_Radcliffe_0007.jpg', 'stimulus': 'target'},
        {'image': 'Celebs/17_Emma_Watson_0006.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/17_Margot_Robbie_0006.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/17_Margot_Robbie_0012.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/17_Margot_Robbie_0014.jpg', 'stimulus': 'non_target'},
        {'image': 'Celebs/18_Daniel_Radcliffe_0002.jpg', 'stimulus': 'target'},
        {'image': 'Celebs/18_Daniel_Radcliffe_0007.jpg', 'stimulus': 'target'},
        {'image': 'Celebs/18_Daniel_Radcliffe_0008.jpg', 'stimulus': 'target'},
        {'image': 'Celebs/18_Emma_Stone_0016.jpg', 'stimulus': 'non_target'}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
      Routine trial
      Routine blankScreen
    LoopTerminator trials
    Routine trialBlockScreen
  LoopTerminator trial_block
  Routine GoodbyeScreen
